CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:47
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['']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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{}
    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file doesnot contain "Mask") (file doesnot contain "MASK")
    Name to assign these images:RAW
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "DAPI_") (file does contain "_Masks")
    Name to assign these images:GFP_MASK
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "MASK-BK")
    Name to assign these images:MASK_BK
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:FileLocation

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:MASK_BK
    Name the primary objects to be identified:Mask_Obj
    Typical diameter of objects, in pixel units (Min,Max):500,500000
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After declumping only
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MaskImage:[module_num:6|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
    Select the input image:RAW
    Name the output image:BK_Masked_RAW
    Use objects or an image as a mask?:Objects
    Select object for mask:Mask_Obj
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    Invert the mask?:No

Crop:[module_num:7|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notes:['RK turned crop on 8-15-21']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
    Select the input image:BK_Masked_RAW
    Name the output image:BK_Cropped_RAW
    Select the cropping shape:Objects
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    Remove empty rows and columns?:All
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    Select the objects:Mask_Obj

ColorToGray:[module_num:8|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notes:['RK changed to cropped_RAW 8-15-21']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
    Select the input image:BK_Cropped_RAW
    Conversion method:Split
    Image type:Channels
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    Channel count:4
    Channel number:1
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    Image name:Channel1_BK
    Channel number:2
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    Image name:Channel2_BK
    Channel number:3
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    Image name:Channel3_BK
    Channel number:4
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    Image name:Channel4_BK

ColorToGray:[module_num:9|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
    Select the input image:RAW
    Conversion method:Split
    Image type:Channels
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    Channel count:4
    Channel number:1
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    Image name:Channel1_FullSize
    Channel number:2
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    Image name:Channel2_FullSize
    Channel number:3
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    Image name:Channel3_FullSize
    Channel number:4
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    Image name:Channel4_FullSize

Threshold:[module_num:10|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
    Select the input image:Channel2_BK
    Name the output image:Threshold_C2_NumD6
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0
    Upper outlier fraction:0
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:6
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
Threshold:[module_num:11|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
    Select the input image:Channel2_BK
    Name the output image:Threshold_C2_NumD8
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0
    Upper outlier fraction:0
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:8
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
IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:Threshold_C2_NumD6
    Name the primary objects to be identified:C2_Puncta_NumD6
    Typical diameter of objects, in pixel units (Min,Max):1,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.8
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
IdentifyPrimaryObjects:[module_num:13|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
    Select the input image:Threshold_C2_NumD8
    Name the primary objects to be identified:C2_Puncta_NumD8
    Typical diameter of objects, in pixel units (Min,Max):1,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.8
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
MaskImage:[module_num:14|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
    Select the input image:Channel2_BK
    Name the output image:Mask_Thresh_C2_NumD6
    Use objects or an image as a mask?:Image
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    Select image for mask:Threshold_C2_NumD6
    Invert the mask?:No

MaskImage:[module_num:15|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
    Select the input image:Channel2_BK
    Name the output image:Mask_Thresh_C2_NumD8
    Use objects or an image as a mask?:Image
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    Select image for mask:Threshold_C2_NumD8
    Invert the mask?:No

MeasureImageIntensity:[module_num:16|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
    Select images to measure:Channel2_BK
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:C2_Puncta_NumD6
    Calculate custom percentiles:No
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
MeasureImageIntensity:[module_num:17|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
    Select images to measure:Channel2_BK
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:C2_Puncta_NumD8
    Calculate custom percentiles:No
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
Threshold:[module_num:18|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
    Select the input image:Channel2_FullSize
    Name the output image:Final_Threshold_C2_NumD6
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Select the measurement to threshold with:Intensity_MinIntensity_Channel2_BK_C2_Puncta_NumD6
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
Threshold:[module_num:19|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
    Select the input image:Channel2_FullSize
    Name the output image:Final_Threshold_C2_NumD8
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Select the measurement to threshold with:Intensity_MinIntensity_Channel2_BK_C2_Puncta_NumD8
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
Threshold:[module_num:20|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
    Select the input image:Channel1_BK
    Name the output image:Threshold_C1_NumD12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0
    Upper outlier fraction:0
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:12
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
Threshold:[module_num:21|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
    Select the input image:Channel1_BK
    Name the output image:Threshold_C1_NumD10
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0
    Upper outlier fraction:0
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:10
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
Threshold:[module_num:22|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
    Select the input image:Channel1_BK
    Name the output image:Threshold_C1_NumD6
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0
    Upper outlier fraction:0
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:6
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
Threshold:[module_num:23|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
    Select the input image:Channel1_BK
    Name the output image:Threshold_C1_NumD8
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0
    Upper outlier fraction:0
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:8
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
IdentifyPrimaryObjects:[module_num:24|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
    Select the input image:Threshold_C1_NumD10
    Name the primary objects to be identified:C1_Puncta_NumD10
    Typical diameter of objects, in pixel units (Min,Max):1,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.8
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
IdentifyPrimaryObjects:[module_num:25|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
    Select the input image:Threshold_C1_NumD12
    Name the primary objects to be identified:C1_Puncta_NumD12
    Typical diameter of objects, in pixel units (Min,Max):1,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.8
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
IdentifyPrimaryObjects:[module_num:26|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
    Select the input image:Threshold_C1_NumD6
    Name the primary objects to be identified:C1_Puncta_NumD6
    Typical diameter of objects, in pixel units (Min,Max):1,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.8
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
IdentifyPrimaryObjects:[module_num:27|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
    Select the input image:Threshold_C1_NumD8
    Name the primary objects to be identified:C1_Puncta_NumD8
    Typical diameter of objects, in pixel units (Min,Max):1,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.8
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
MaskImage:[module_num:28|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
    Select the input image:Channel1_BK
    Name the output image:Mask_Thresh_C1_NumD10
    Use objects or an image as a mask?:Image
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    Select image for mask:Threshold_C1_NumD10
    Invert the mask?:No

MaskImage:[module_num:29|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
    Select the input image:Channel1_BK
    Name the output image:Mask_Thresh_C1_NumD12
    Use objects or an image as a mask?:Image
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    Select image for mask:Threshold_C1_NumD12
    Invert the mask?:No

MaskImage:[module_num:30|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
    Select the input image:Channel1_BK
    Name the output image:Mask_Thresh_C1_NumD6
    Use objects or an image as a mask?:Image
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    Select image for mask:Threshold_C1_NumD6
    Invert the mask?:No

MaskImage:[module_num:31|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
    Select the input image:Channel1_BK
    Name the output image:Mask_Thresh_C1_NumD8
    Use objects or an image as a mask?:Image
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    Select image for mask:Threshold_C1_NumD8
    Invert the mask?:No

MeasureImageIntensity:[module_num:32|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
    Select images to measure:Channel1_BK
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:C1_Puncta_NumD10
    Calculate custom percentiles:No
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
MeasureImageIntensity:[module_num:33|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
    Select images to measure:Channel1_BK
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:C1_Puncta_NumD12
    Calculate custom percentiles:No
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
MeasureImageIntensity:[module_num:34|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
    Select images to measure:Channel1_BK
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:C1_Puncta_NumD6
    Calculate custom percentiles:No
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
MeasureImageIntensity:[module_num:35|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
    Select images to measure:Channel1_BK
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:C1_Puncta_NumD8
    Calculate custom percentiles:No
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
Threshold:[module_num:36|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
    Select the input image:Channel1_FullSize
    Name the output image:Final_Threshold_C1_NumD10
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Select the measurement to threshold with:Intensity_MinIntensity_Channel1_BK_C1_Puncta_NumD10
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
Threshold:[module_num:37|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
    Select the input image:Channel1_FullSize
    Name the output image:Final_Threshold_C1_NumD12
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Select the measurement to threshold with:Intensity_MinIntensity_Channel1_BK_C1_Puncta_NumD12
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
Threshold:[module_num:38|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
    Select the input image:Channel1_FullSize
    Name the output image:Final_Threshold_C1_NumD6
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Select the measurement to threshold with:Intensity_MinIntensity_Channel1_BK_C1_Puncta_NumD6
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
Threshold:[module_num:39|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
    Select the input image:Channel1_FullSize
    Name the output image:Final_Threshold_C1_NumD8
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Select the measurement to threshold with:Intensity_MinIntensity_Channel1_BK_C1_Puncta_NumD8
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
IdentifyPrimaryObjects:[module_num:40|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
    Select the input image:GFP_MASK
    Name the primary objects to be identified:GFP
    Typical diameter of objects, in pixel units (Min,Max):8,100
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MeasureObjectSizeShape:[module_num:41|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
    Select object sets to measure:GFP
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:42|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
    Select the objects to filter:GFP
    Name the output objects:FilteredAllGFP
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_MaximumRadius
    Filter using a minimum measurement value?:Yes
    Minimum value:8
    Filter using a maximum measurement value?:No
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
MeasureObjectSizeShape:[module_num:43|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
    Select object sets to measure:FilteredAllGFP
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MaskImage:[module_num:44|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enabled:False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
    Select the input image:Final_Threshold_C1
    Name the output image:GFP_Masked_C1
    Use objects or an image as a mask?:Objects
    Select object for mask:FilteredAllGFP
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    Invert the mask?:No

MaskImage:[module_num:45|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enabled:False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
    Select the input image:Final_Threshold_C2
    Name the output image:GFP_Masked_C2
    Use objects or an image as a mask?:Objects
    Select object for mask:FilteredAllGFP
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    Invert the mask?:No

MeasureObjectIntensity:[module_num:46|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
    Select images to measure:Final_Threshold_C1_NumD10, Final_Threshold_C1_NumD12, Final_Threshold_C1_NumD6, Final_Threshold_C1_NumD8, Final_Threshold_C2_NumD6, Final_Threshold_C2_NumD8
    Select objects to measure:FilteredAllGFP

ExportToSpreadsheet:[module_num:47|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|Z:\\RKDATA\\ConfocalData\\SDC\\HCR\\RV-dG-GFP_40X_TrueBlack\\Data\\Nos1Cy5_Spp1Cy3_RvGFP\\CellProfilerOutput\\1-12-23\\higher_NumDs
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:FilteredAllGFP|Location_MaxIntensity_X_Final_Threshold_C2_NumD6,FilteredAllGFP|Location_MaxIntensity_X_Final_Threshold_C2_NumD8,FilteredAllGFP|Location_MaxIntensity_X_Final_Threshold_C1_NumD12,FilteredAllGFP|Location_MaxIntensity_X_Final_Threshold_C1_NumD8,FilteredAllGFP|Location_MaxIntensity_X_Final_Threshold_C1_NumD10,FilteredAllGFP|Location_MaxIntensity_X_Final_Threshold_C1_NumD6,FilteredAllGFP|Location_MaxIntensity_Z_Final_Threshold_C1_NumD8,FilteredAllGFP|Location_MaxIntensity_Z_Final_Threshold_C1_NumD6,FilteredAllGFP|Location_MaxIntensity_Z_Final_Threshold_C2_NumD8,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Nos1_Spp1_1-12-23_higher_NumDs
    Overwrite existing files without warning?:Yes
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