CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:29
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:No

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "4Channel")
    Name to assign these images:RAW
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Gad2")
    Name to assign these images:Gad2CellPoseMasks
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Slc17a6")
    Name to assign these images:Slc17a6CellPoseMasks
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:RAW
    Conversion method:Split
    Image type:Channels
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    Channel count:4
    Channel number:1
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    Image name:Channel1
    Channel number:2
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    Image name:Channel2
    Channel number:3
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    Image name:Channel3
    Channel number:4
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    Image name:Channel4

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Gad2CellPoseMasks
    Name the primary objects to be identified:CT_Gad2Neurons
    Typical diameter of objects, in pixel units (Min,Max):8,100
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:Slc17a6CellPoseMasks
    Name the primary objects to be identified:CT_Slc17a6Neurons
    Typical diameter of objects, in pixel units (Min,Max):8,100
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
Smooth:[module_num:8|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
    Select the input image:Channel4
    Name the output image:MedianFilteredDAPI
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:MedianFilteredDAPI
    Name the primary objects to be identified:CT_DAPI
    Typical diameter of objects, in pixel units (Min,Max):8,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Minimum Cross-Entropy

Smooth:[module_num:10|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
    Select the input image:Channel1
    Name the output image:MedianFilteredKcng2
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
Smooth:[module_num:11|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
    Select the input image:Channel2
    Name the output image:MedianFilteredGad2
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
Smooth:[module_num:12|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
    Select the input image:Channel3
    Name the output image:MedianFilteredPax6
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
MeasureImageIntensity:[module_num:13|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
    Select images to measure:MedianFilteredGad2, MedianFilteredKcng2, MedianFilteredPax6
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
RescaleIntensity:[module_num:14|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
    Select the input image:Channel1
    Name the output image:RescaledKcng2
    Rescaling method:Divide each image by a previously calculated value
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    Divisor measurement:Intensity_MaxIntensity_MedianFilteredKcng2

RescaleIntensity:[module_num:15|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
    Select the input image:Channel2
    Name the output image:RescaledPax6
    Rescaling method:Divide each image by a previously calculated value
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    Divisor measurement:Intensity_MaxIntensity_MedianFilteredPax6

RescaleIntensity:[module_num:16|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
    Select the input image:Channel3
    Name the output image:RescaledGad2
    Rescaling method:Divide each image by a previously calculated value
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    Divisor measurement:Intensity_MaxIntensity_MedianFilteredGad2

Threshold:[module_num:17|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
    Select the input image:RescaledKcng2
    Name the output image:Kcng2Robust
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.00
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:18|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
    Select the input image:RescaledPax6
    Name the output image:Pax6Robust
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.00
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:19|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
    Select the input image:RescaledGad2
    Name the output image:Gad2Robust
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.00
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
MeasureObjectIntensity:[module_num:20|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
    Select images to measure:CellPoseMasks, Channel1, Channel2, Channel3, Channel4, Gad2Robust, Kcng2Robust, Pax6Robust
    Select objects to measure:CT_DAPI, CT_Gad2Neurons

CalculateMath:[module_num:21|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enabled:False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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Object
    Select the first operand objects:Gad2Neurons
    Select the first operand measurement:Intensity
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
FilterObjects:[module_num:22|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
    Select the objects to filter:CT_Gad2Neurons
    Name the output objects:CT_Kcng2_Gad2
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Intensity_IntegratedIntensity_Kcng2Robust
    Filter using a minimum measurement value?:Yes
    Minimum value:24
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:23|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
    Select the objects to filter:CT_Gad2Neurons
    Name the output objects:CT_Pax6_Gad2
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Intensity_IntegratedIntensity_Pax6Robust
    Filter using a minimum measurement value?:Yes
    Minimum value:36
    Filter using a maximum measurement value?:No
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
OverlayOutlines:[module_num:24|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Pax6Robust
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#04F90C
    Select objects to display:CT_Gad2Neurons
    Select outline color:#FF00EE
    Select objects to display:CT_Kcng2_Gad2

MaskObjects:[module_num:25|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
    Select objects to be masked:CT_Kcng2_Gad2
    Name the masked objects:CT_Kcng2_Pax6_Gad2
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CT_Pax6_Gad2
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:26|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
    Select objects to be masked:CT_Gad2Neurons
    Name the masked objects:CT_Gad2Pax6neg
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CT_Pax6_Gad2
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:27|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
    Select objects to be masked:CT_Gad2Pax6neg
    Name the masked objects:CT_Gad2only
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CT_Kcng2_Gad2
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MeasureObjectSizeShape:[module_num:28|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
    Select object sets to measure:CT_DAPI, CT_Gad2Neurons, CT_Gad2Pax6neg, CT_Gad2only, CT_Kcng2_Gad2, CT_Kcng2_Pax6_Gad2, CT_Pax6_Gad2
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:29|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|/mnt/share/RKDATA/ConfocalData/SDC/RNAscope/V2/ZI/Sagittal/FINALSET_FIRSTTIER/Gad2_Pax6_Kcng2/RAW_TIFs/CellProfilerOutput
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:CT_Gad2only|AreaShape_Zernike_3_3,CT_Gad2only|AreaShape_Zernike_3_1,CT_Gad2only|AreaShape_Zernike_7_3,CT_Gad2only|AreaShape_Zernike_7_5,CT_Gad2only|AreaShape_Zernike_7_1,CT_Gad2only|AreaShape_Zernike_7_7,CT_Gad2only|AreaShape_Zernike_5_5,CT_Gad2only|AreaShape_Zernike_5_1,CT_Gad2only|AreaShape_Zernike_5_3,CT_Gad2only|AreaShape_Zernike_9_9,CT_Gad2only|AreaShape_Zernike_9_1,CT_Gad2only|AreaShape_Zernike_9_7,CT_Gad2only|AreaShape_Zernike_9_3,CT_Gad2only|AreaShape_Zernike_9_5,CT_Gad2only|AreaShape_Zernike_4_0,CT_Gad2only|AreaShape_Zernike_4_2,CT_Gad2only|AreaShape_Zernike_4_4,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Kcng2Pax6Gad2_CellPoseGad2_092122
    Overwrite existing files without warning?:No
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