CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:33
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "4Channel")
    Name to assign these images:RAW
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Mask")
    Name to assign these images:CellPoseMasks
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:RAW
    Conversion method:Split
    Image type:Channels
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    Channel count:4
    Channel number:1
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    Image name:Channel1
    Channel number:2
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    Image name:Channel2
    Channel number:3
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    Image name:Channel3
    Channel number:4
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    Image name:Channel4

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:CellPoseMasks
    Name the primary objects to be identified:CT_Kcng2Neurons
    Typical diameter of objects, in pixel units (Min,Max):8,100
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
Smooth:[module_num:7|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
    Select the input image:Channel4
    Name the output image:MedianFilteredDAPI
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
MeasureImageIntensity:[module_num:8|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
    Select images to measure:MedianFilteredDAPI
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:MedianFilteredDAPI
    Name the primary objects to be identified:CT_DAPI
    Typical diameter of objects, in pixel units (Min,Max):8,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.348
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:Yes
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    Size of adaptive window:100
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    Thresholding method:Minimum Cross-Entropy

Smooth:[module_num:10|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
    Select the input image:Channel1
    Name the output image:MedianFilteredKcng2
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
Smooth:[module_num:11|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
    Select the input image:Channel2
    Name the output image:MedianFilteredNos1
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
Smooth:[module_num:12|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
    Select the input image:Channel3
    Name the output image:MedianFilteredSpp1
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
MeasureImageIntensity:[module_num:13|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
    Select images to measure:MedianFilteredDAPI, MedianFilteredKcng2, MedianFilteredNos1, MedianFilteredSpp1
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
RescaleIntensity:[module_num:14|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
    Select the input image:Channel1
    Name the output image:RescaledKcng2
    Rescaling method:Divide each image by a previously calculated value
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    Divisor measurement:Intensity_MaxIntensity_MedianFilteredKcng2

RescaleIntensity:[module_num:15|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
    Select the input image:Channel2
    Name the output image:RescaledNos1
    Rescaling method:Divide each image by a previously calculated value
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    Divisor measurement:Intensity_MaxIntensity_MedianFilteredNos1

RescaleIntensity:[module_num:16|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
    Select the input image:Channel3
    Name the output image:RescaledSpp1
    Rescaling method:Divide each image by a previously calculated value
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    Divisor measurement:Intensity_MaxIntensity_MedianFilteredSpp1

Threshold:[module_num:17|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
    Select the input image:RescaledKcng2
    Name the output image:Kcng2Robust
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2
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
Threshold:[module_num:18|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
    Select the input image:RescaledSpp1
    Name the output image:Spp1Robust
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2
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
Threshold:[module_num:19|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
    Select the input image:RescaledNos1
    Name the output image:Nos1Robust
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2
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
MeasureObjectIntensity:[module_num:20|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
    Select images to measure:Channel1, Channel2, Channel3, Channel4, Kcng2Robust, Nos1Robust, RescaledKcng2, RescaledNos1, RescaledSpp1, Spp1Robust
    Select objects to measure:CT_DAPI, CT_Kcng2Neurons

CalculateMath:[module_num:21|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enabled:False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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Object
    Select the first operand objects:Gad2Neurons
    Select the first operand measurement:Intensity
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
FilterObjects:[module_num:22|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
    Select the objects to filter:CT_Kcng2Neurons
    Name the output objects:CT_Nos1_Kcng2
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Intensity_IntegratedIntensity_Nos1Robust
    Filter using a minimum measurement value?:Yes
    Minimum value:36
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:23|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
    Select the objects to filter:CT_Kcng2Neurons
    Name the output objects:CT_Spp1_Kcng2
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Intensity_IntegratedIntensity_Spp1Robust
    Filter using a minimum measurement value?:Yes
    Minimum value:24
    Filter using a maximum measurement value?:No
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
DisplayDataOnImage:[module_num:24|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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:CT_Kcng2Neurons
    Measurement to display:Intensity_IntegratedIntensity_RescaledSpp1
    Select the image on which to display the measurements:RescaledNos1
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
OverlayOutlines:[module_num:25|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Slc30a3Robust
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#04F90C
    Select objects to display:CT_Pax6Neurons
    Select outline color:#FF00EE
    Select objects to display:CT_Total_Slc30a3
    Select outline color:#FF0017
    Select objects to display:CT_Total_Spp1

OverlayOutlines:[module_num:26|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Spp1Robust
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#F90419
    Select objects to display:CT_Pax6Neurons
    Select outline color:#00FBFF
    Select objects to display:CT_Total_Spp1

MaskObjects:[module_num:27|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
    Select objects to be masked:CT_Nos1_Kcng2
    Name the masked objects:CT_Nos1_Spp1_Kcng2
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CT_Spp1_Kcng2
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:28|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
    Select objects to be masked:CT_Kcng2Neurons
    Name the masked objects:CT_Kcng2_Nos1neg
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CT_Nos1_Kcng2
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:29|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
    Select objects to be masked:CT_Kcng2_Nos1neg
    Name the masked objects:CT_Kcng2only
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CT_Spp1_Kcng2
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

OverlayOutlines:[module_num:30|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Nos1Robust
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#01EE0C
    Select objects to display:CT_Nos1_Kcng2
    Select outline color:#D301F8
    Select objects to display:CT_Spp1_Kcng2
    Select outline color:#FF8A00
    Select objects to display:CT_Nos1_Spp1_Kcng2
    Select outline color:Yellow
    Select objects to display:CT_Kcng2only

OverlayOutlines:[module_num:31|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Nos1Robust
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#01EE0C
    Select objects to display:CT_Kcng2_Nos1neg

MeasureObjectSizeShape:[module_num:32|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
    Select object sets to measure:CT_DAPI, CT_Kcng2Neurons, CT_Kcng2_Nos1neg, CT_Kcng2only, CT_Nos1_Kcng2, CT_Nos1_Spp1_Kcng2, CT_Spp1_Kcng2
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:33|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|/mnt/share/RKDATA/ConfocalData/SDC/RNAscope/V2/ZI/Sagittal/FINALSET_FIRSTTIER/Spp1_Nos1_Kcng2/CellProfilerOutput/Spp1_ii24_Nos1_ii36
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Intensity_LowerQuartileIntensity_MedianFilteredSpp1,Image|Intensity_LowerQuartileIntensity_MedianFilteredDAPI,Image|Intensity_LowerQuartileIntensity_MedianFilteredNos1,Image|Intensity_LowerQuartileIntensity_MedianFilteredKcng2,Image|Intensity_TotalArea_MedianFilteredDAPI,Image|Intensity_TotalArea_MedianFilteredSpp1,Image|Intensity_TotalArea_MedianFilteredNos1,Image|Intensity_TotalArea_MedianFilteredKcng2,Image|Intensity_MinIntensity_MedianFilteredNos1,Image|Intensity_MinIntensity_MedianFilteredDAPI,Image|Intensity_MinIntensity_MedianFilteredSpp1,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Spp1Nos1Kcng2_CellPoseKcng2_092122
    Overwrite existing files without warning?:No
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